PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'Education': '', 'Age': '', 'Sex': '', 'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  expName = UnCon-CFS
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Routines
  Routine Instructions
    TextComponent text_instruction1_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = (f_p[0], 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      wrapWidth = float(win.size[0]/3)
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      text:
        درود؛
        به این آزمون خوش‌آمدید.
    TextComponent text_instruction1_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = [s_p[0], 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      wrapWidth = float(win.size[0]/3)
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      text:
        درود؛
        به این آزمون خوش‌آمدید.
    TextComponent text_instruction2_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = (f_p[0], 0)
      startVal [time (s)] = 1
      wrapWidth = float(win.size[0]/3)
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      text:
        در هر مرحله به شما یک پیام نشان‌داده خواهد شد.
        باتوجه به میزان اهمیت پیام برای شما،
        تصمیم بگیرد که اگر در این پیام را در یک
        شبکه‌ی اجتماعی مشاهده می‌کردید
        چه واکنشی نشان می‌دادید؟
    TextComponent text_instruction2_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = (s_p[0], 0)
      startVal [time (s)] = 1
      wrapWidth = float(win.size[0]/3)
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      text:
        در هر مرحله به شما یک پیام نشان‌داده خواهد شد.
        باتوجه به میزان اهمیت پیام برای شما،
        تصمیم بگیرد که اگر در این پیام را در یک
        شبکه‌ی اجتماعی مشاهده می‌کردید
        چه واکنشی نشان می‌دادید؟
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine flash_init
    CodeComponent def_set_colors
      Code Type = Py
      Begin Experiment:
        # set_colors()
        # Colors used during the experiment.
        # Color variables end with _c.
        def set_colors():
            global sc_c # screen color
            global f_c # frame color
            global f2_c # frame 2 color
            global sq_c # square color
            #global sq_f_c # square color
            #global t_c  # text color
            global c_c  # circle color
            # 1 = white
            # -0.06 = grey 80
            # -0.37 = grey 120
            # -1 = black
            sc_c = [.002, .002, .002]
            f_c = [-1,-1,-1]
            f2_c = [1,1,1]
            sq_c = [.002, .002, .002]
            sq_f_c = [.002, .002, .002]
            t_c = [1,1,1]
            c_c = 'red'
    CodeComponent def_set_sizes
      Code Type = Py
      Begin Experiment:
        # set_sizes()
        # Sizes used during the experiment
        # Size variables end with _s.
        def set_sizes():
            global f_s # frame size (square) (frame surrounding the stimulus)
            #global f2_s # frame 2 size (square) (frame surrounding the stimulus)
            global sq_s # square size (square where the stimulus is shown)
            #global sq_f_s # square size (square underneath is shown)
            #global l_s # line size (the width of the line surrounding the stimulus)
            global fix_s  # size of fixation crosses on top of stimuli
            #global pic_s  # size of the face (useful when showing smaller face above/below fixation cross)
            global f_s_tw # frame size of textbox
            global f2_s_tw
            global sq_s_tw # square size of textbox
            global icon_s #size of the mouse icons
            global circle

            screen_size = np.array( win.size )
            f_s = np.array( [ win.size[0]/2, win.size[1] ] )
            sq_s = (f_s) * 0.95
            circle = 600
            fix_s = 80
            f_s_tw = np.array( [ win.size[0]/2, win.size[1]/2 ] )
            f2_s_tw = (f_s_tw) * 0.99
            sq_s_tw =(f_s_tw) * 0.95
            icon_s = 150
            #f_s = 685
            #f2_s = 665
            #sq_s = 645
            #sq_f_s = 645
            #l_s = 30
            #fix_s = 80
            #pic_s = sq_s
    CodeComponent def_set_positions
      Code Type = Py
      Begin Experiment:
        # set_positions()
        # Positions used during the experiment
        # Position variables end with _p.
        def set_positions():
          global s_p # position of the text and image stimuli (left or right according experiment settings).
          global f_p # position of the flash stimulus (right or left according experiment settings).
          global s_p_tw
          global f_p_tw
          global s_p_sq
          global f_p_sq
          global s_p_iconL
          global f_p_iconL
          global s_p_iconSh
          global f_p_iconSh
          #global txt_above_f_p # position of the reminder for the button for above.
          #global txt_below_f_p # position of the reminder for the button for below.
          #global txt_above_s_p # position of the reminder for the button for above.
          #global txt_below_s_p # position of the reminder for the button for below.
          #global line_left_start  # start position of vertical lines sticking out of frame
          #global line_left_end
          #global line_right_start
          #global line_right_end

          delta_x, delta_y = win.size/4
          quarter_centers = [ [-delta_x, +delta_y], [+delta_x, +delta_y], [+delta_x, -delta_y], [-delta_x, -delta_y] ] #centers when window is quartered.
          half_centers = [ [-delta_x , 0], [delta_x, 0] ] #centers when window is halved.
          s_p = half_centers[0]
          f_p = half_centers[1]
          s_p_tw = quarter_centers[1]
          f_p_tw = quarter_centers[0]
          s_p_sq = quarter_centers[3]
          f_p_sq = quarter_centers[2]

          like_share_dist = win.size[0]/14
          icon_centers = np.array([like_share_dist, 0])
          s_p_iconL = np.array( quarter_centers[3] ) + icon_centers
          #s_p_iconL= np.array([20, 20])
          f_p_iconL = np.array( quarter_centers[2]) + icon_centers
          #f_p_iconL = np.array([40, 20])
          s_p_iconSh = np.array( quarter_centers[3]) - icon_centers
          #s_p_iconSh = np.array([60, 20])
          f_p_iconSh = np.array( quarter_centers[2]) - icon_centers
          #f_p_iconSh = np.array([80, 20])

          #offset = 0 # To displace the center from the real center.
                          # Positive offset approach to the screen center
                          # while negative offset move away the screen center.
          #center_l = offset - win.size[0]/4 # center of left part of the screen
          #center_r = -center_l # center of right part of the screen
          #s_p = [center_r, 0]
          #f_p = [center_l, 0]
          #txt_above_f_p = [center_l+100, -200]
          #txt_below_f_p = [center_l-100, -200]
          #txt_above_s_p = [center_r+100, -200]
          #txt_below_s_p = [center_r-100, -200]
          #line_left_start = (- f_s/2 - 1000, 0)
          #line_left_end =  ( - f_s/2, 0)
          #line_right_start = (+ f_s/2, 0)
          #line_right_end = ( + f_s/2 + 1000, 0)
    CodeComponent def_set_timing
      Code Type = Py
      Begin Experiment:
        # define timings
        def jittery():
            global before_t # The duration (in frames) before the stimulus presentation
            global fade_i_t # The duration (in frames) of the fade in of stimulus
            global inside_t # The duration (in frames) of a stimulus presentation beetwen fade in and out
            global fade_o_t # The duration (in frames) of the fade out of stimulus
            global after_t # The duration (in frames) after stimulus presentation
            global stim_t # The duration (in frames) of the stimulus (in + inside + out)
            global total_t # The duration (in frames) of a stimulus presentation (before + stimulus + after)
            global fade_i_end_t # The frame end of the fade in
            global fade_o_beg_t # The frame end of the inside
            global fade_o_end_t # The frame end of the fade out

            global before_t_f # The duration (in frames) before the stimulus presentation
            global fade_i_t_f # The duration (in frames) of the fade in of stimulus
            global inside_t_f # The duration (in frames) of a stimulus presentation beetwen fade in and out
            global fade_o_t_f # The duration (in frames) of the fade out of stimulus
            global after_t_f # The duration (in frames) after stimulus presentation
            global stim_t_f # The duration (in frames) of the stimulus (in + inside + out)
            global total_t_f # The duration (in frames) of a stimulus presentation (before + stimulus + after)
            global fade_i_end_t_f # The frame end of the fade in
            global fade_o_beg_t_f # The frame end of the inside
            global fade_o_end_t_f # The frame end of the fade out

            global f_t # The duration (in frames) of a flash image presentation
            f_t = 6
            fps = 10 # frames per second

        #    before_t = x * fps # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER

            # TIMES FOR OPACITY OF FACE
            before_t = 0 * fps
            fade_i_t = 1 * fps
            inside_t = 8 * fps
            fade_o_t = 0 * fps
            after_t = 0 * fps
            stim_t  = fade_i_t + inside_t + fade_o_t  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            total_t  = before_t + stim_t + after_t  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_i_end_t = before_t + fade_i_t   # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_o_beg_t = fade_i_end_t + inside_t  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_o_end_t = before_t + stim_t  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER


        #    # TIMES FOR OPACITY OF FLASHES
        #    before_t_f = 0 * fps
        #    fade_i_t_f = 0 * fps
        #    inside_t_f = 1 * fps
        #    fade_o_t_f = 7 * fps
        #    after_t_f = 0 * fps
        #    stim_t_f  = fade_i_t_f + inside_t_f + fade_o_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
        #    total_t_f  = before_t_f + stim_t_f + after_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
        #    fade_i_end_t_f = before_t_f + fade_i_t_f   # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
        #    fade_o_beg_t_f = fade_i_end_t_f + inside_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
        #    fade_o_end_t_f = before_t_f + stim_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            #f_t = 6

            # TIMES FOR OPACITY OF FRAME BEHIND FLASHES
            before_t_f = 2 * fps
            fade_i_t_f = 7 * fps
            inside_t_f = 0 * fps
            fade_o_t_f = 0 * fps
            after_t_f = 0 * fps
            stim_t_f  = fade_i_t_f + inside_t_f + fade_o_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            total_t_f  = before_t_f + stim_t_f + after_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_i_end_t_f = before_t_f + fade_i_t_f   # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_o_beg_t_f = fade_i_end_t_f + inside_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            fade_o_end_t_f = before_t_f + stim_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
    CodeComponent def_flash
      Code Type = Py
      Begin Experiment:
        # flash stimulus functions
        # flash initialization
        def flash_init(win, position=[0,0], square_size=10, columns=10, rows=10):
            global flash # The flash stimulus (an array of flashing squares)
            #sqsp=30
            red = [1, -1, -1]
            green = [-1, 1, -1]
            blue = [-1, -1, 1]
            yellow = [1, 0.97, -0.55]
            pink = [1, 0.6, 0.6]
            black = [-1, -1, -1]
            color_set = [red, green, blue, yellow, pink, black]
            cell_number = columns * rows
            by_color = int(np.floor(float(cell_number)/len(color_set)))
            # np.floor returns the next biggest integer (e.g. np.floor of 2.5 is 2)
            # fill an array with colors. Each color should appear approximatively the same number of times.
            f_colors = []
            for c in color_set:
                for i in range(by_color):
                    f_colors.append(c)
            shuffle(color_set)
            i = cell_number - len(f_colors)
            while i > 0:
                f_colors.append(color_set[i])
                i -= 1
            # randomize color order.
            shuffle(f_colors)
            # fill an array with coordinate for each color square. First square should be at the upper left
            # and next should follow from left to right and up to down.
            xys = []
            x_left = (1 - columns) * square_size / 2
            y_top = (1 - rows) * square_size / 2
            for l in range(rows):
                for c in range(columns):
                   #r1=(random()-0.5)*square_size #ariel
                   #r2=(random()-0.5)*square_size
                    xys.append((x_left+ c * square_size, y_top+ l * square_size))
            flash = visual.ElementArrayStim(win=win,
                                fieldPos=position,
                                fieldShape='sqr',
                                nElements=cell_number,
                                sizes=square_size,
                                xys=xys,
                                colors=f_colors,
                                elementTex=None,
                                elementMask=None,
                                name='flash',
                                autoLog=False)

        # flash stimulus change
        def flash_change():
            global flash
            shuffle(flash.colors)
            flash.setColors(flash.colors)
    CodeComponent experiment_init
      Code Type = Py
      Begin Experiment:
        # initiate colors
        set_colors()
        set_sizes()
        set_positions()
        jittery()
        flash_init(win, f_p, square_size=60, columns=11, rows=21)
        #flash_s_init(win, s_p, square_size=50, columns=10, rows=10)
  Routine pause
    TextComponent text_pause_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = [f_p[0], 0]
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        هرموقع که آماده بودید کلید
        space
        را فشار دهید.
    TextComponent text_pause_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = [s_p[0], 0]
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        هرموقع که آماده بودید کلید
        space
        را فشار دهید.
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SmileOrFrown
    PolygonComponent frame_s_instblock
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = (f_s, f_s)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent frame2_s_instblock
      fillColor = $f2_c
      lineColor = $f2_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = (f2_s, f2_s)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent square_s_instblock
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = (sq_s, sq_s)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent frame_f_instblock
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = (f_s, f_s)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent frame2_f_instblock
      fillColor = $f2_c
      lineColor = $f2_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = (f2_s, f2_s)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent square_f_instblock
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = (sq_s, sq_s)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent textinstrblock_f
      letterHeight = 30
      pos = f_p
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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    TextComponent textinstrblock_s
      letterHeight = 30
      pos = s_p
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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    TextComponent button_above_f
      letterHeight = fix_s
      pos = txt_above_f_p
      startVal [time (s)] = 0.0
      text = +
      wrapWidth = None
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    TextComponent button_below_f
      letterHeight = fix_s
      pos = txt_below_f_p
      startVal [time (s)] = 0.0
      text = +
      wrapWidth = None
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    TextComponent button_above_s
      letterHeight = fix_s
      pos = txt_above_s_p
      startVal [time (s)] = 0.0
      text = +
      wrapWidth = None
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    TextComponent button_below_s
      letterHeight = fix_s
      pos = txt_below_s_p
      startVal [time (s)] = 0.0
      text = +
      wrapWidth = None
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    KeyboardComponent key_resp_SmileOrFrown
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Relax
    PolygonComponent frame_s_relax
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent square_s_relax
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = sq_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent frame_f_relax
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent square_f_relax
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = sq_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent textrelax_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = f_p
      startVal [time (s)] = 0.0
      text = استراحت
      wrapWidth = float(win.size[0]/3)
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    TextComponent textrelax_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = s_p
      startVal [time (s)] = 0.0
      text = استراحت
      wrapWidth = float(win.size[0]/3)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanksText_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = f_p
      startVal [time (s)] = 0.0
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      text:
        پایان آزمون.
        با سپاس از شما
    TextComponent thanksText_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = s_p
      startVal [time (s)] = 0.0
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      text:
        پایان آزمون.
        با سپاس از شما
    KeyboardComponent key_resp_thanks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibration
    PolygonComponent circle_s_sq
      lineColor = $c_c
      lineWidth = 10
      nVertices = 65
      pos = s_p
      shape = regular polygon...
      size = circle
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent frame_f_sq
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent square_f_sq1
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = sq_s
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cfs
    PolygonComponent frame_s_i
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $total_t
      units = pix
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    PolygonComponent square_s_i
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = sq_s
      startVal [time (s)] = 0.0
      stopVal [condition] = $frame_s_i.status==FINISHED
      units = pix
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    ImageComponent image
      image [set every repeat] = $Image
      opacity [set every frame] = ((frameN - before_t) / fade_i_t) if (frameN <fade_i_end_t) else (1 if(frameN < fade_o_beg_t) else (fade_o_end_t - frameN) / fade_o_t)
      pos = s_p
      size = sq_s
      startVal [frame N] = $before_t
      stopVal [duration (frames)] = $stim_t
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    PolygonComponent frame_f_i
      fillColor = $[1,1,1]
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_flash
      color = $0.06
      image = None
      pos = f_p
      size = sq_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent flash
      Code Type = Py
      Begin Routine:
        # flash begin routine
        f_change = 0
      Each Frame:
        # flash each frame
        if frameN >= f_change:
            flash_change()
            myRand =randint(1,100)
            f_change += f_t
        flash.draw()
    TextComponent fix_cross_stim_side
      color = black
      letterHeight = fix_s
      pos = s_p
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = None
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    TextComponent fix_cross_flash_side
      color = black
      letterHeight = fix_s
      pos = f_p
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = None
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  Routine blank
    PolygonComponent frame_s_blank
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent frame_f_blank
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent backblank_f
      fillColor = $sc_c
      lineColor = $sc_c
      pos = f_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    PolygonComponent backblank_s
      fillColor = $sc_c
      lineColor = $sc_c
      pos = s_p
      shape = rectangle
      size = f_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_blank_s
      letterHeight = 0.1
      pos = s_p
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_blank_f
      letterHeight = 0.1
      pos = s_p
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Tweet
    PolygonComponent frame_tw_s
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p_tw
      shape = rectangle
      size = f_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent frame_tw_f
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p_tw
      shape = rectangle
      size = f_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent square_tw_s
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = s_p_tw
      shape = rectangle
      size = sq_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent square_tw_f
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = f_p_tw
      shape = rectangle
      size = sq_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    TextComponent text_tweet_s1
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = s_p_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Tweets
      wrapWidth = float(win.size[0]/3)
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    TextComponent text_tweet_f1
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = f_p_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = float(win.size[0]/3)
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      text [set every repeat]:
        $Tweets
    PolygonComponent frame_icon_s
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = s_p_sq
      shape = rectangle
      size = f_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent frame_icon_f
      fillColor = $f_c
      lineColor = $f_c
      lineWidth = 0
      pos = f_p_sq
      shape = rectangle
      size = f_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent square_icon_s
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = s_p_sq
      shape = rectangle
      size = sq_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    PolygonComponent square_icon_f
      fillColor = $sc_c
      lineColor = $sc_c
      lineWidth = 0
      pos = f_p_sq
      shape = rectangle
      size = sq_s_tw
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent logoL_s
      image [set every repeat] = like.png
      pos = s_p_iconL
      size = icon_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent logoL_f
      image [set every repeat] = like.png
      pos = f_p_iconL
      size = icon_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent logoSh_s
      image [set every repeat] = share.png
      pos = s_p_iconSh
      size = icon_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    ImageComponent logoSh_f
      image [set every repeat] = share.png
      pos = f_p_iconSh
      size = icon_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    MouseComponent mouse
      clickable = logoL_f, logoL_s, logoSh_f, logoSh_s
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine flash_init
  Routine Instructions
  Routine calibration
  Routine pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = ImageConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Random', 0.925786769257543), ('Image', '4aNeutral.png'), ('Type', 'without cfs'), ('Tweets', 'آدم بدا')]),
      OrderedDict([('Random', 0.467454223613678), ('Image', '7aNeutral.png'), ('Type', 'incongruent'), ('Tweets', 'آها')]),
      OrderedDict([('Random', 0.334033342194694), ('Image', '5aNeutral.png'), ('Type', 'without cfs'), ('Tweets', 'جالبه')]),
      OrderedDict([('Random', 0.32127829206197), ('Image', '9aNeutral.png'), ('Type', 'congruent'), ('Tweets', 'چای بیار')]),
      OrderedDict([('Random', 0.372574348050033), ('Image', '10aNeutral.png'), ('Type', 'without cfs'), ('Tweets', 'خوبی')]),
      OrderedDict([('Random', 0.629945633400008), ('Image', '3aNeutral.png'), ('Type', 'congruent'), ('Tweets', 'رفتم کافه')]),
      OrderedDict([('Random', 0.217075611264131), ('Image', '2aNeutral.png'), ('Type', 'incongruent'), ('Tweets', 'زرذ')]),
      OrderedDict([('Random', 0.213269670053808), ('Image', '8aNeutral.png'), ('Type', 'without cfs'), ('Tweets', 'زندگی همینه')]),
      OrderedDict([('Random', 0.345904004670104), ('Image', '0aNeutral.png'), ('Type', 'congruent'), ('Tweets', 'سلام')]),
      OrderedDict([('Random', 0.740834377721891), ('Image', '6aNeutral.png'), ('Type', 'incongruent'), ('Tweets', 'که این طور')]),
      OrderedDict([('Random', 0.637723186176978), ('Image', '1aNeutral.png'), ('Type', 'congruent'), ('Tweets', 'من هم خوبم')])]
    Routine Relax
    Routine cfs
    Routine blank
    Routine Tweet
  LoopTerminator trials_2
  Routine thanks
